opentrons/protocol-designer 5.2.6
schemaVersion: 3
protocolName: Antiboitics
author: Suman Tiwari
description: Serial dilution of  antibiotics
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p50_single: {mount: left}
  p300_multi: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Corning 96 Well Plate 360 µL Flat: {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, slot: 3}
  Corning 96 Well Plate 360 µL Flat (1): {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, slot: 4}
  Corning 96 Well Plate 360 µL Flat (2): {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, slot: 5}
  Corning 96 Well Plate 360 µL Flat (3): {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, slot: 6}
  Corning 96 Well Plate 360 µL Flat (4): {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, slot: 7}
  Corning 96 Well Plate 360 µL Flat (5): {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, slot: 8}
  (Retired) TipOne 96 Tip Rack 200 µL: {definitionId: opentrons/tipone_96_tiprack_200ul/1, slot: 1}
  Axygen 1 Well Reservoir 90 mL: {definitionId: opentrons/axygen_1_reservoir_90ml/1, slot: 9}
  (Retired) TipOne 96 Tip Rack 200 µL (1): {definitionId: opentrons/tipone_96_tiprack_200ul/1, slot: 2}
pipetteTiprackAssignments:
  p50_single: opentrons/tipone_96_tiprack_200ul/1
  p300_multi: opentrons/tipone_96_tiprack_200ul/1
ingredients:
  - Antibiotics: {description: different concentration of different antibiotics}
  - CA-MHB
ingredLocations:
  Corning 96 Well Plate 360 µL Flat:
    Antibiotics {volume: 30}: A12-H12
  Axygen 1 Well Reservoir 90 mL:
    CA-MHB {volume: 20000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: Axygen 1 Well Reservoir 90 mL
  aspirate_wells: A1
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  aspirate_mix_checkbox: true
  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A12
  dispense_mix_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 150
  path: single
  changeTip: never
  aspirate_labware: Axygen 1 Well Reservoir 90 mL
  aspirate_wells: A1
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  aspirate_mix_checkbox: true
  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A2-A11
  dispense_mix_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 150
  path: single
  changeTip: once
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A12
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  aspirate_mix_checkbox: true
  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A11
  dispense_mix_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 150
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A11
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  aspirate_mix_checkbox: true
  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A10
  dispense_mix_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 150
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A10
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  aspirate_mix_checkbox: true
  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A9
  dispense_mix_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 150
  path: single
  changeTip: once
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A9
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  aspirate_mix_checkbox: true
  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A8
  dispense_mix_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 150
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A8
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  aspirate_mix_checkbox: true
  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A7
  dispense_mix_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 150
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A7
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  aspirate_mix_checkbox: true
  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A6
  dispense_mix_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 150
  path: single
  changeTip: once
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A6
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  aspirate_mix_checkbox: true
  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A5
  dispense_mix_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 150
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A5
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  aspirate_mix_checkbox: true
  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A4
  dispense_mix_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 150
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A4
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  aspirate_mix_checkbox: true
  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A3
  dispense_mix_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 150
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A3
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  aspirate_mix_checkbox: true
  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A2
  dispense_mix_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 150
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A2
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  aspirate_mix_checkbox: true
  dispense_labware: Trash
  dispense_wells: A1
  dispense_mix_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: once
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A2
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (1)
  dispense_wells: A2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A2
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (2)
  dispense_wells: A2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A2
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (3)
  dispense_wells: A2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A2
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (4)
  dispense_wells: A2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A2
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (5)
  dispense_wells: A2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: once
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A3
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (1)
  dispense_wells: A3
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A3
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (2)
  dispense_wells: A3
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A3
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (3)
  dispense_wells: A3
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A3
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (4)
  dispense_wells: A3
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A3
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (5)
  dispense_wells: A3
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: once
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (1)
  dispense_wells: A4
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (2)
  dispense_wells: A4
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (3)
  dispense_wells: A4
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (4)
  dispense_wells: A4
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (5)
  dispense_wells: A4
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: once
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A5
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (1)
  dispense_wells: A5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A5
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (2)
  dispense_wells: A5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A5
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (3)
  dispense_wells: A5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A5
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (4)
  dispense_wells: A5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A5
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (5)
  dispense_wells: A5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: once
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A6
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (1)
  dispense_wells: A6
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A6
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (2)
  dispense_wells: A6
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A6
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (3)
  dispense_wells: A6
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A6
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (4)
  dispense_wells: A6
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A6
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (5)
  dispense_wells: A6
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: once
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A7
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (1)
  dispense_wells: A7
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A7
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (2)
  dispense_wells: A7
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A7
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (3)
  dispense_wells: A7
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A7
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (4)
  dispense_wells: A7
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A7
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (5)
  dispense_wells: A7
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: once
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A8
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (1)
  dispense_wells: A8
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A8
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (2)
  dispense_wells: A8
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A8
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (3)
  dispense_wells: A8
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A8
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (4)
  dispense_wells: A8
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A8
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (5)
  dispense_wells: A8
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: once
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A9
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (1)
  dispense_wells: A9
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A9
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (2)
  dispense_wells: A9
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A9
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (3)
  dispense_wells: A9
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A9
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (4)
  dispense_wells: A9
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A9
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (5)
  dispense_wells: A9
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: once
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A10
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (1)
  dispense_wells: A10
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A10
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (2)
  dispense_wells: A10
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A10
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (3)
  dispense_wells: A10
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A10
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (4)
  dispense_wells: A10
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A10
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (5)
  dispense_wells: A10
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: once
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A11
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (1)
  dispense_wells: A11
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A11
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (2)
  dispense_wells: A11
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A11
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (3)
  dispense_wells: A11
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A11
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (4)
  dispense_wells: A11
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A11
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (5)
  dispense_wells: A11
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: once
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A12
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (1)
  dispense_wells: A12
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A12
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (2)
  dispense_wells: A12
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A12
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (3)
  dispense_wells: A12
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A12
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (4)
  dispense_wells: A12
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A12
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  dispense_labware: Corning 96 Well Plate 360 µL Flat (5)
  dispense_wells: A12
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_multi, labware: (Retired) TipOne 96 Tip Rack 200 µL, well: A1}
- aspirate: {pipette: p300_multi, volume: 200, labware: Axygen 1 Well Reservoir 90 mL, well: A1, offsetFromBottomMm: 1, flowRate: 150}
- dispense: {pipette: p300_multi, volume: 200, labware: Corning 96 Well Plate 360 µL Flat, well: A12, offsetFromBottomMm: 0.5, flowRate: 300}
- aspirate: {pipette: p300_multi, volume: 70, labware: Axygen 1 Well Reservoir 90 mL, well: A1, offsetFromBottomMm: 1, flowRate: 150}
- dispense: {pipette: p300_multi, volume: 70, labware: Corning 96 Well Plate 360 µL Flat, well: A12, offsetFromBottomMm: 0.5, flowRate: 300}
- aspirate: {pipette: p300_multi, volume: 150, labware: Axygen 1 Well Reservoir 90 mL, well: A1, offsetFromBottomMm: 1, flowRate: 150}
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